graphs:

  - nodes:
      - id: carrier_sinus
        module: timeflux_example.nodes.sinus
        class: Sinus
        params:
          rate: 1
          amplitude: 1

      - id: noise_sinus
        module: timeflux_example.nodes.sinus
        class: Sinus
        params:
          rate: 10
          amplitude: .1

      # part 1
      - id: add_sinus
        module: timeflux_example.nodes.arithmetic
        class: MatrixAdd


      # part 2
      - id: lowpass
        module: timeflux_dsp.nodes.filters
        class: IIRFilter
        params:
          rate: 10
          frequencies: [2]
          order: 5
          filter_type: lowpass

      # part 3
      # TODO: add an UI to monitor the signal before and after filtering

    edges:
      # part 1
      - source: carrier_sinus
        target: add_sinus:m1
      - source: noise_sinus
        target: add_sinus:m2
#      - source: add_sinus
#        target: display

#      # part 2
      - source: add_sinus
        target: lowpass


      # part 3
      # TODO: plug the signals to the UI

    rate: 32